<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="MooneyRivlin" name="MooneyRivlin" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <component name="main">
        <!-- Units -->
        <units name="strain">
            <unit units="dimensionless"/>
        </units>
        <units name="stress">
            <unit units="newton"/>
            <unit exponent="-2" units="metre"/>
        </units>
        <!-- Variables-->
        <variable name="time" units="second"/>
        <variable initial_value="0" name="E11" units="strain"/>
        <variable initial_value="0" name="E22" units="strain"/>
        <variable initial_value="0" name="E33" units="strain"/>
        <variable initial_value="0" name="E13" units="strain"/>
        <variable initial_value="0" name="E23" units="strain"/>
        <variable initial_value="0" name="E12" units="strain"/>
        <variable initial_value="2" name="c1" units="stress"/>
        <variable initial_value="6" name="c2" units="stress"/>
        <variable name="Tdev11" units="stress"/>
        <variable name="Tdev22" units="stress"/>
        <variable name="Tdev33" units="stress"/>
        <variable name="Tdev13" units="stress"/>
        <variable name="Tdev23" units="stress"/>
        <variable name="Tdev12" units="stress"/>
        <variable initial_value="0" name="dummy" units="stress"/>
        <!-- Equations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>Tdev11</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">2.0</cn>
                        <ci>c1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                        <apply>
                            <plus/>
                            <ci>E22</ci>
                            <ci>E33</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Tdev22</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">2.0</cn>
                        <ci>c1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                        <apply>
                            <plus/>
                            <ci>E11</ci>
                            <ci>E33</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Tdev33</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">2.0</cn>
                        <ci>c1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                        <apply>
                            <plus/>
                            <ci>E11</ci>
                            <ci>E22</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="strain">4.0</cn>
                        <ci>c2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Tdev12</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="strain">4.0</cn>
                    </apply>
                    <ci>E12</ci>
                    <ci>c2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Tdev13</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="strain">4.0</cn>
                    </apply>
                    <ci>E13</ci>
                    <ci>c2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Tdev23</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="strain">4.0</cn>
                    </apply>
                    <ci>E23</ci>
                    <ci>c2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>dummy</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <ci>Tdev11</ci>
                        <ci>Tdev22</ci>
                        <ci>Tdev33</ci>
                        <ci>Tdev13</ci>
                        <ci>Tdev23</ci>
                        <ci>Tdev12</ci>
                    </apply>
                    <ci>time</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
